PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['No Partisipan'], expName, expInfo['date'])
  Experiment info = {'No Partisipan': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Save psydat file = False
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  blendMode = nofbo
  color = $[1, 1, 1]
  expName = WSAP
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Instruction1
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    TextComponent Ins1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Anda akan melihat kata dan kalimat yang muncul di layar secara bergantian dengan urutan sebagai berikut:
        1. Sebuah kata akan muncul terlebih dahulu.
        2. Setelah itu, akan muncul sebuah kalimat.

        Anda diminta untuk menekan tombol <SPASI> pada papan ketik komputer setelah selesai membaca kalimat yang muncul pada layar.

        Kemudian, akan muncul sebuah pertanyaan di layar mengenai apakah kata dan kalimat yang ditampilkan sebelumnya berkaitan atau tidak.

        Anda diminta menjawab IYA (menekan tombol 1) atau TIDAK (menekan tombol 0)
    TextComponent Next1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 2
      text = Tekan tombo <SPASI> untuk melanjutkan
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    KeyboardComponent next1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine Instruction2
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    TextComponent Ins2
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Perlu Diingat!
        1. Jawablah secepat mungkin, tapi tetap teliti
        2. Tidak ada jawaban benar atau salah
        3. Ikuti kesan pertama Anda
        4. Tetap fokus selama mengerjakan
    TextComponent Next2
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 2
      text = Tekan tombol L untuk melanjutkan
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    KeyboardComponent next2
      allowedKeys = 'l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine Instruction3
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    KeyboardComponent StartPractice
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Practice_Ins
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1
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      text:
        Sebelum mengerjakan tes, anda akan melakukan sesi latihan terlebih dahulu.

        Tekan P untuk memulai latihan
  Routine StartInstruction
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    TextComponent Start_Ins
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sesi latihan telah selesai

        Tekan tombol M untuk memulai pengerjaan
    KeyboardComponent StartIns
      allowedKeys = 'm'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank_screen
    RoutineSettingsComponent blank_screen
      stopVal [duration (s)] = 0
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  Routine End
    RoutineSettingsComponent End
      stopVal [duration (s)] = 3
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    TextComponent Exit
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Mohon tunggu, sedang menyimpan data.
      units = height
      wrapWidth = 1
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    CodeComponent Exitcode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString();
        }).join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'j8SbWj3G2vW7', // UPDATE WITH YOUR DATAPIPE EXPERIMENT ID
                filename: filename,
                data: data,
            }),
        })
        .then(response => response.json())
        .then(result => {
            // Log response and force experiment end
            console.log(result);
            quitPsychoJS();
        })
        .catch(err => {
            // Handle network or server errors
            console.error('Failed to save data:', err);
        });
  Routine stimuli
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    TextComponent Stimuli
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $stimulus
      units = height
      wrapWidth = 2
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    KeyboardComponent Space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent Next
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 1
      text = Tekan <SPASI> untuk melanjutkan
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  Routine fix_cross
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    PolygonComponent Fixcross
      fillColor = $[-1, -1, -1]
      lineColor = $[-1, -1, -1]
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    TextComponent Prime
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prime
      units = height
      wrapWidth = 1
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  Routine answer
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    TextComponent Question
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1
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      text:
        Apakah situasi tersebut cocok dengan kata yang muncul sebelumnya?

        Tekan 1 jika YA, tekan 0 jika TIDAK.
    KeyboardComponent Answer
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Pfix
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    PolygonComponent P_fix
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent PPrime
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Pprime
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  Routine Pstimuli
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    TextComponent PStimulus
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $Pstimulus
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    TextComponent Pnext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 1
      text = Tekan <SPASI> untuk melanjutkan
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    KeyboardComponent P_next
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine Panswer
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    TextComponent PQuestion
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Apakah situasi tersebut cocok dengan kata yang muncul sebelumnya?

        Tekan 1 jika YA, tekan 0 jika TIDAK.
    KeyboardComponent P_answer
      allowedKeys = '1','0'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction1
  Routine Instruction2
  Routine Instruction3
  LoopInitiator Ptrials loopType="TrialHandler"
    conditionsFile = Practice_Trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'Digosipi', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'negative'},
      {'prime': 'Kebetulan', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'positive'},
      {'prime': 'Diabaikan', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'negative'},
      {'prime': 'Sibuk', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'positive'}]
    Routine Pfix
    Routine Pstimuli
    Routine Panswer
  LoopTerminator Ptrials
  Routine StartInstruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'Digosipi', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Kebetulan', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Diabaikan', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Sibuk', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Mengejek', 'stimulus': 'Seseorang tertawa setelah saya berbicara.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Terhibur', 'stimulus': 'Seseorang tertawa setelah saya berbicara.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Ditolak', 'stimulus': 'Pendapat saya tidak langsung ditanggapi dalam rapat.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Dipertimbangkan', 'stimulus': 'Pendapat saya tidak langsung ditanggapi dalam rapat.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Kesal', 'stimulus': 'Teman saya menjawab dengan singkat.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Buru-Buru', 'stimulus': 'Teman saya menjawab dengan singkat.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Tidak Suka', 'stimulus': 'Seseorang melihat saya lalu mengalihkan pandangan.', 'condition': 'negative', 'context': 'social'}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
    Routine fix_cross
    Routine stimuli
    Routine answer
  LoopTerminator trials
  Routine End
